; delay definitions
define delay tau1
"tau1=d3*(1+cnst1+2*cnst2)-p1/2"
define delay tau2
"tau2=d3*(1-cnst2)-p1"
define delay tau3 
"tau3 = 2*d3*(1-cnst2)-p1"
define delay tau1p 
"tau1p = d3*2*(1-cnst1+2*cnst2)-p1"
"l1=0"  ; start the evolution counter at 0

1   ze

2
d1 rpp1 rpp2 rpp3 rpp4
100u pl2:f2
(p1 ph0):f2
1.5u
4
tau1
(p1 ph1^):f2
tau2
(p1 ph2^):f2
tau3
(p1 ph3^):f2
tau2
(p1 ph4^):f2
tau1p
(p1 ph1^):f2
tau2
(p1 ph2^):f2
tau3
(p1 ph3^):f2
tau2
(p1 ph4^):f2
tau1

lo to 4 times l1
(p1 ph5):f2
1.5u
1m
(p1 ph30):f2

go=2 ph31
1m wr #0 if #0

iu1
iu1

25m ip5*144

lo to 2 times td1

exit
ph0 = (360) 90 270

ph1 = (360) 9 45 261 297 153 189 45 81 297 333 189 225 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153
ph2 = (360) 108 144 0 36 252 288 144 180 36 72 288 324 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252
ph3 = (360) 117 153 9 45 261 297 153 189 45 81 297 333 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261
ph4 = (360) 36 72 288 324 180 216 72 108 324 0 216 252 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180

ph5 = (360) 279 99

ph30 = (360) 90 270
ph31 = 0 2